PsychoPy2experiment version="2026.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant_ID'], expName, expInfo['date'])
  Experiment info = {'participant_ID': '', 'age': '', 'sex': '', 'handedness (left or right)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.0039, 0.0039, 0.0039
  expName = Necker_with_sound_conditioning2
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.05
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    ImageComponent image_2
      image [set every repeat] = $image
      size = (6, 5.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
      units = deg
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    TextComponent text_2
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
      units = deg
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    KeyboardComponent G0_NoGo_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine blank
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    ImageComponent image4
      color = $[1, 1, 1]
      image [set every repeat] = $choice
      saveStartStop = False
      size = (17, 7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_8
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
      units = deg
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  Routine blank_cross
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    TextComponent text_4
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = $randint(62, 125)
      text [set every repeat] = +
      units = deg
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  Routine Necker
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    ImageComponent image_3
      image = Necker6.png
      size = (6, 5.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.15
      units = deg
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    TextComponent text_5
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
      units = deg
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    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = $Sound
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.05
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    CodeComponent code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        port.write(str.encode(chr(1)))
  Routine instructions
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    TextComponent text_3
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        Fixate on the cross in the middle of the screen
        Make sure the chair\'s front legs are on the line

        Do not blink

        After each stimulus, indicate which was the immediate first percept you saw by answering the question that follows using the arrow buttons.
        Immediately return your gaze to the fixation cross.

        (press space to begin)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine cross
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    TextComponent text_6
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = deg
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  Routine NeckerBaseline
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    ImageComponent image_4
      image = Necker6.png
      saveStartStop = False
      size = (6, 5.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      units = deg
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    TextComponent text_7
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
      units = deg
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        port = serial.Serial(port = "COM3" , baudrate = 115200)
      Begin Routine:
        port.write(str.encode(chr(1)))
      End Experiment:
        port.close();
  Routine break_2
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    TextComponent text_9
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        You can now take a short break. Rest your eyes.

        Press space when you're ready to go again
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine goNogo
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
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    TextComponent text_10
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
      text = +
      units = deg
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  Routine Instr_gonogo
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    TextComponent text_11
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
      text = Press space when you see the following percept paired with the tone
      units = deg
      wrapWidth = 40
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    ImageComponent image_5
      image = R.png
      saveStartStop = False
      size = (8, 7)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
      units = deg
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    SoundComponent sound_3
      forceEndRoutine = False
      saveStartStop = False
      sound = 440.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.05
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    TextComponent text_12
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
      text = withold from pressing otherwise
      units = deg
      wrapWidth = 40
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    TextComponent text_13
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 9
      stopVal [duration (s)] = 3.6
      text = Here is the pair again, only press space when these two are perceived together
      units = deg
      wrapWidth = 40
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    ImageComponent image_6
      image = R.png
      saveStartStop = False
      size = (8, 7)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 1.0
      units = deg
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    SoundComponent sound_4
      forceEndRoutine = False
      saveStartStop = False
      sound = 440.wav
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.05
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    TextComponent text_14
      color = black
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 14
      units = deg
      wrapWidth = 40
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      text:
        ready?

        (press space)
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 14
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    TextComponent text_20
      color = black
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 1.5
      text = +
      units = deg
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    TextComponent text_21
      color = black
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 12.6
      stopVal [duration (s)] = 1.4
      text = +
      units = deg
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  Routine dontpress1
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    TextComponent text_15
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = +
      units = deg
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    ImageComponent image_7
      image [set every repeat] = $image
      saveStartStop = False
      size = (8, 7)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.4
      units = deg
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    TextComponent text_16
      color = black
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.0
      text = DON'T PRESS SPACE
      units = deg
      wrapWidth = 40
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    SoundComponent sound_6
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.05
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  Routine pressEx
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    TextComponent text_17
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text = +
      units = deg
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    ImageComponent image_8
      image [set every repeat] = $image
      saveStartStop = False
      size = (8, 7)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.4
      units = deg
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    TextComponent text_18
      color = black
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.2
      text = PRESS SPACE
      units = deg
      wrapWidth = 40
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    SoundComponent sound_5
      forceEndRoutine = False
      saveStartStop = False
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.05
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  Routine ready_
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    TextComponent text_19
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        Ready?
        (press space to begin)
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Intro
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    TextComponent text_22
      color = black
      letterHeight = 1.2
      pos = (0, 7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        The Necker cube is an ambiguous figure and can be "perceived" in two ways, see below and confirm you can see both views.

        (press space to continue)
    ImageComponent image_9
      image = intro.png
      pos = (0, -4)
      saveStartStop = False
      size = (16, 14)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        port = serial.Serial(port = "COM3" , baudrate = 115200)
      End Experiment:
        port.close();
  Routine intro2
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    TextComponent text_23
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        You will be shown the Necker cube several times and will need to indicate which of the two you perceived.

        Put on headphones and make sure you can hear the sound that will play after pressing space.

        (space to continue)
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine last_instructions
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    ImageComponent image_10
      image = GoNoGo2.png
      pos = (0, -5)
      saveStartStop = False
      size = (35, 16)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_24
      color = black
      letterHeight = 1.2
      pos = (0, 8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        So here is a recap:
        There are four possible scenarios, you only press space for the one.
        (press space to continue)
  Routine Practice_run
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    TextComponent text_25
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text:
        Ready for a quick practice run?

        Note: the question after stimulus presentation does not stay constant

        (press space to continue)
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Baseline
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    TextComponent text_26
      color = black
      letterHeight = 1.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 35
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      text:
        Ready to begin?

        (press space to begin)
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine sound_test
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    SoundComponent sound_7
      forceEndRoutine = False
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Thanks
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank you!!

        The End.
  Routine variable_cross
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    TextComponent text_28
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $random() * 1
      syncScreenRefresh = False
      units = deg
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      text [set every repeat]:
        +
  Routine conditioned_trigger
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        port.write(str.encode(chr(2)))
  Routine Base_trigger
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        port.write(str.encode(chr(1)))
Flow
  Routine Intro
  Routine intro2
  Routine sound_test
  Routine instructions
  Routine cross
  Routine Practice_run
  LoopInitiator trials_9 loopType="TrialHandler"
    conditionsFile = LorR.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Sound': '440.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
      {'Sound': '0.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None},
      {'Sound': '440.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None},
      {'Sound': '0.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
      {'Sound': '440.wav', 'delay': 0.2, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
      {'Sound': '440.wav', 'delay': 0.2, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None},
      {'Sound': '440.wav', 'delay': 0.85, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
      {'Sound': '440.wav', 'delay': 0.85, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None}]
    Routine blank_cross
    Routine NeckerBaseline
    Routine blank
  LoopTerminator trials_9
  Routine Baseline
  Routine cross
  LoopInitiator trials_6 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = LorR.xlsx
      loopType = random
      nReps = 3
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      conditions:
        [{'Sound': '440.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
        {'Sound': '0.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None},
        {'Sound': '440.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None},
        {'Sound': '0.wav', 'delay': 0, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
        {'Sound': '440.wav', 'delay': 0.2, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
        {'Sound': '440.wav', 'delay': 0.2, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None},
        {'Sound': '440.wav', 'delay': 0.85, 'image': 'Necker.png', 'choice': 'LoR.png', 'ISI': None},
        {'Sound': '440.wav', 'delay': 0.85, 'image': 'Necker.png', 'choice': 'RoL.png', 'ISI': None}]
      Routine blank_cross
      Routine Base_trigger
      Routine Necker
      Routine blank
    LoopTerminator trials_3
    Routine break_2
  LoopTerminator trials_6
  Routine cross
  Routine Instr_gonogo
  Routine last_instructions
  LoopInitiator trials_7 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = SoundEx.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Sound': '440.wav', 'text': 'Left', 'image': 'L.png'},
      {'Sound': '0.wav', 'text': 'Right', 'image': 'R.png'},
      {'Sound': '0.wav', 'text': 'Left', 'image': 'L.png'},
      {'Sound': '440.wav', 'text': 'Right', 'image': 'R.png'}]
    Routine dontpress1
  LoopTerminator trials_7
  LoopInitiator trials_8 loopType="TrialHandler"
    Selected rows = 3
    conditionsFile = SoundEx.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [{'Sound': '440.wav', 'text': 'Left', 'image': 'L.png'},
      {'Sound': '0.wav', 'text': 'Right', 'image': 'R.png'},
      {'Sound': '0.wav', 'text': 'Left', 'image': 'L.png'},
      {'Sound': '440.wav', 'text': 'Right', 'image': 'R.png'}]
    Routine pressEx
  LoopTerminator trials_8
  Routine ready_
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = SoundA.xlsx
      loopType = random
      nReps = 4
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      conditions:
        [{'Sound': '440.wav', 'text': 'Left', 'image': 'L.png', 'choice': 'LoR.png', 'correct': 'Left', 'GoNoGo': 'None'},
        {'Sound': '440.wav', 'text': 'Right', 'image': 'R.png', 'choice': 'RoL.png', 'correct': 'Left', 'GoNoGo': 'space'},
        {'Sound': '440.wav', 'text': 'Left', 'image': 'L.png', 'choice': 'RoL.png', 'correct': 'Right', 'GoNoGo': 'None'},
        {'Sound': '440.wav', 'text': 'Right', 'image': 'R.png', 'choice': 'LoR.png', 'correct': 'Right', 'GoNoGo': 'space'},
        {'Sound': '0.wav', 'text': 'Left', 'image': 'L.png', 'choice': 'LoR.png', 'correct': 'Left', 'GoNoGo': 'None'},
        {'Sound': '0.wav', 'text': 'Right', 'image': 'R.png', 'choice': 'RoL.png', 'correct': 'Left', 'GoNoGo': 'None'}]
      Routine blank_cross
      Routine trial
      Routine goNogo
    LoopTerminator trials
    Routine break_2
  LoopTerminator trials_5
  Routine instructions
  Routine cross
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = LorR.xlsx
      loopType = random
      nReps = 3
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      conditions:
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      Routine blank_cross
      Routine conditioned_trigger
      Routine Necker
      Routine blank
    LoopTerminator trials_2
    Routine break_2
  LoopTerminator trials_4
  Routine Thanks
